acquisition:
  metadata:
    subject_id: 123456
    experimenter_name: adam glaser
    immersion_medium: 0.05X SSC
    immersion_medium_refractive_index: 1.33
    x_anatomical_direction: Anterior_to_posterior
    y_anatomical_direction: Inferior_to_superior
    z_anatomical_direction: Left_to_right
  operations:
    transfers:
      vp-151mx:
        driver: voxel.processes.file_transfer.rsync
        module: FileTransfer
        init:
          external_drive: './test'
        settings:
          protocol: robocopy
    writers:
      vp-151mx:
        driver: voxel.writers.bdv
        module: Writer
        init:
          path: '.'
        settings:
          compression: none
          data_type: uint16
    pre_processes:
      {}
    intra_processes:
      max projection:
        driver: voxel.processes.max_projection
        module: MaxProjection
    post_processes:
      {}
  tiles:
    - tile_number:
        x: 0
        y: 0
        z: 0
      position_mm:
        x: 0
        y: 0
        z: 0
      voxel_size_um:
        x: 0.748
        y: 0.748
        z: 1.000
      filename_prefix: tile
      frame_count: 64
      channel: 488
      power_mw: 1000
      filter: BP405